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Filtering:SpatialFilter int SpatialFilterType= 0 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 11 11 1.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 1.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 1.00000 0.00000 0.00000 0.00000 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1.00000 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter int SFUseThreading= 1 0 0 1 // Use threading to calculate spatial filter (boolean)
Filtering:P3TemporalFilter int EpochLength= 800ms 500ms 0 % // Length of data epoch from stimulus onset
Filtering:P3TemporalFilter int EpochsToAverage= 6 1 0 % // Number of epochs to average
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Visualize:P3TemporalFilter int TargetERPChannel= 1 1 % % // Input channel for which to display ERP data
Filtering:LinearClassifier matrix Classifier= 1560 { input%20channel input%20element%20(bin) output%20channel weight } 1 27 1 2.58591 1 28 1 2.58591 1 29 1 2.58591 1 30 1 2.58591 1 31 1 2.58591 1 32 1 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11 390 1 -1.70677 // Linear classification matrix in sparse representation
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System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } SpatialFilter 2.A P3TemporalFilter 2.B LinearClassifier 2.C // SignalProcessing filter chain
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Source:Signal%20Properties:DataIOFilter int SourceCh= 16 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 4 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 512 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 16 F3 Fz F4 T7 C3 Cz C4 T8 Cp3 Cp4 P3 Pz P4 O7 Oz O8 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 16 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.5 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Test Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:gUSBampADC intlist SourceChList= 0 0 1 128 // list of channels to digitize
Source:gUSBampADC intlist SourceChDevices= 1 16 16 1 17 // number of digitized channels per device
Source:gUSBampADC int NumBuffers= 5 1 2 32 // number of software buffers to use
Source:gUSBampADC string DeviceIDMaster= auto // deviceID for the device whose SYNC goes to the slaves
Source:gUSBampADC int FilterEnabled= 1 1 0 1 // Enable pass band filter (0=no, 1=yes)
Source:gUSBampADC float FilterHighPass= 0.1 0.1 0 50 // high pass filter for pass band
Source:gUSBampADC float FilterLowPass= 30 60 0 4000 // low pass filter for pass band
Source:gUSBampADC int FilterModelOrder= 8 8 1 12 // filter model order for pass band
Source:gUSBampADC int FilterType= 1 1 1 2 // filter type for pass band (1=BUTTERWORTH, 2=CHEBYSHEV)
Source:gUSBampADC int NotchEnabled= 1 1 0 1 // Enable notch (0=no, 1=yes)
Source:gUSBampADC float NotchHighPass= 48 58 0 70 // high pass filter for notch filter
Source:gUSBampADC float NotchLowPass= 52 62 0 4000 // low pass filter for notch filter
Source:gUSBampADC int NotchModelOrder= 4 4 1 10 // filter model order for notch filter
Source:gUSBampADC int NotchType= 1 1 1 2 // filter type for pass band (1=CHEBYSHEV, 2=BUTTERWORTH)
Source:gUSBampADC list DeviceIDs= 1 auto // list of USBamps to be used (or auto)
Source:gUSBampADC int DigitalInput= 0 0 0 1 // enable digital input:  0: false, 1: true (enumeration)
Source:gUSBampADC int DigitalOutput= 0 0 0 1 // enable digital output on block acquisition (boolean)
Source:gUSBampADC string DigitalOutputEx= % // expression for output on digital output 2 (expression)
Source:gUSBampADC int SignalType= 1 0 0 1 // numeric type of output signal:  0: int16, 1: float32 (enumeration)
Source:gUSBampADC int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration, 2: impedance (enumeration)
Source:gUSBampADC int CommonGround= 1 0 0 1 // internally connect GNDs from all blocks:  0: false, 1: true (enumeration)
Source:gUSBampADC int CommonReference= 1 0 0 1 // internally connect Refs from all blocks:  0: false, 1: true (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 11 1 3 4 6 8 9 10 11 12 13 16 // list of transmitted channels
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gUSBampADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1440 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 900 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 1440 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Application:Sequencing:StimulusTask float PreRunDuration= 2s 1 % % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 2s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 3s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 3/4s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 31.25ms 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask float ISIMinDuration= 125ms 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 125ms 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 2 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Sequencing:P3SpellerTask int NumberOfSequences= 6 15 1 % // number of sequences in a set of intensifications
Application:Speller%20Targets:P3SpellerTask matrix TargetDefinitions= 36 { Display Enter Display%20Size Icon%20File Sound%20File } A A 1 % % B B 1 % % C C 1 % % D D 1 % % E E 1 % % F F 1 % % G G 1 % % H H 1 % % I I 1 % % J J 1 % % K K 1 % % L L 1 % % M M 1 % % N N 1 % % O O 1 % % P P 1 % % Q Q 1 % % R R 1 % % S S 1 % % T T 1 % % U U 1 % % V V 1 % % W W 1 % % X X 1 % % Y Y 1 % % Z Z 1 % % 1 1 1 % % 2 2 1 % % 3 3 1 % % 4 4 1 % % 5 5 1 % % 6 6 1 % % 7 7 1 % % 8 8 1 % % 9 9 1 % % _ %20 1 % % // speller target properties
Application:Speller%20Targets:P3SpellerTask intlist NumMatrixColumns= 1 6 6 1 % // display matrices' column number(s)
Application:Speller%20Targets:P3SpellerTask intlist NumMatrixRows= 1 6 6 0 % // display matrices' row number(s)
Application:Audio%20Stimuli:P3SpellerTask int AudioStimuliOn= 0 0 0 1 // Audio Stimuli Mode (0=no, 1=yes) (boolean)
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliRowsFiles= 6 { filename } sounds\1.wav sounds\2.wav sounds\3.wav sounds\4.wav sounds\5.wav sounds\6.wav // audio stimuli rows files 
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliColsFiles= 6 { filename } sounds\a.wav sounds\b.wav sounds\c.wav sounds\d.wav sounds\e.wav sounds\f.wav // audio stimuli column files 
Application:Speller%20Targets:P3SpellerTask floatlist TargetWidth= 1 16 0 0 100 // target width in percent of screen width
Application:Speller%20Targets:P3SpellerTask floatlist TargetHeight= 1 14 0 0 100 // target height in percent of screen height
Application:Speller%20Targets:P3SpellerTask floatlist TargetTextHeight= 1 12 0 0 100 // height of target labels in percent of screen height
Application:Speller%20Targets:P3SpellerTask stringlist BackgroundColor= 1 0x00000000 0x505050 % % // target background color (color)
Application:Speller%20Targets:P3SpellerTask stringlist TextColor= 1 0x00555555 0x505050 % % // text color (color)
Application:Speller%20Targets:P3SpellerTask stringlist TextColorIntensified= 1 0x00FFFFFF 0x505050 % % // intensified text color (color)
Application:Speller%20Targets:P3SpellerTask intlist IconHighlightMode= 1 1 1 0 4 // icon highlight method 0: Show/Hide, 1: Intensify, 2: Grayscale, 3: Invert, 4: Dim    (enumeration)
Application:Speller%20Targets:P3SpellerTask floatlist IconHighlightFactor= 1 0.5 0.5 0 % // scale factor for highlighted icon pixel values
Application:Speller:P3SpellerTask int FirstActiveMenu= 1 1 1 % // Index of first active menu
Application:Speller:P3SpellerTask float StatusBarSize= 10 0 0 100 // size of status bar in percent of screen height
Application:Speller:P3SpellerTask float StatusBarTextHeight= 4 0 0 100 // size of status bar text in percent of screen height
Application:Speller:P3SpellerTask string TextToSpell= VARIO // character or string to spell in offline copy mode
Application:Speller:P3SpellerTask string TextResult= % // user spelling result
Application:Speller:P3SpellerTask int TestMode= 1 0 0 1 // select targets by clicking on their associated stimuli (0=no, 1=yes) (boolean)
Application:Speller:P3SpellerTask string DestinationAddress= % // network address for speller output in IP:port format
Application:Text%20Window:P3SpellerTask int TextWindowEnabled= 0 0 0 1 // Show Text Window (0=no, 1=yes) (boolean)
Application:Text%20Window:P3SpellerTask int TextWindowLeft= 600 0 0 % // Text Window X location
Application:Text%20Window:P3SpellerTask int TextWindowTop= 5 0 0 % // Text Window Y location
Application:Text%20Window:P3SpellerTask int TextWindowWidth= 512 512 0 % // Text Window Width
Application:Text%20Window:P3SpellerTask int TextWindowHeight= 512 512 0 % // Text Window Height
Application:Text%20Window:P3SpellerTask string TextWindowFontName= Courier // Text Window Font Name
Application:Text%20Window:P3SpellerTask int TextWindowFontSize= 10 4 1 % // Text Window Font Size
Application:Text%20Window:P3SpellerTask string TextWindowFilePath= % // Path for Saved Text File (directory)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:GazeMonitor:GazeMonitorFilter int VisualizeGazeMonitorFilter= 0 0 0 1 // Visualize the gaze data on the app visualization (boolean)
Application:GazeMonitor:GazeMonitorFilter int EnforceFixation= 0 0 0 1 // Enforce a fixation point on the screen (boolean)
Application:GazeMonitor:GazeMonitorFilter string FixationX= 0.5 0.5 % % // X coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter string FixationY= 0.5 0.5 % % // Y coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter float BlinkTime= 100ms 100ms 0 % // Maximum allowed time for invalid eyes
Application:GazeMonitor:GazeMonitorFilter float SaccadeTime= 100ms 100ms 0 % // Maximum allowed time for violating the fixation
Application:GazeMonitor:GazeMonitorFilter float FixationRadius= 0.1 0.1 0.0 1.0 // Allowable distance from fixation center
Application:GazeMonitor:GazeMonitorFilter string FixationImage= % // Image to render at fixation (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationImage= % // Image to render at fixation when violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationSound= % // Sound to play when fixation violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter float FixationImageSize= 0.04 0.04 0.01 1.0 // Size in percentage of screen height of the fixation image
Application:GazeMonitor:GazeMonitorFilter int LogGazeInformation= 0 0 0 1 // Add Eyetracker information to applog (boolean)
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { TIME%20OUT%20!!! Waiting%20to%20start%20... } Zeit%20abgelaufen! Warte%20... // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 5 { Filter%20Name Position%20String } ConnectorInput 2.9999 P3SpellerTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 GazeMonitorFilter 3.A // Application filter chain
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